// This CellML file was generated on 11/12/2009 at 17:32:14 using:
//
// COR (0.9.31.1319)
// Copyright 2002-2009 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
// created: W3CDTF 2009-03-03T00:00:00+00:00
// creator: Orgname University of Oxford; Orgunit Department of Physiology, Anatomy & Genetics; martin.fink@dpag.ox.ac.uk; Given Martin; Family Fink
def model Maleckar2008 as
  // Mathematical simulations of ligand-gated and cell-type specific effects on the action potential of human atrium
  //
  // Catherine Lloyd
  //
  // ABI
  //
  // Model Status
  //
  // This CellML model is known to run in PCEnv and COR to recreate the published results. The units have been checked and are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: In the mammalian heart, myocytes and fibroblasts can communicate via gap junction, or connexin-mediated current flow. Some of the effects of this electrotonic coupling on the action potential waveform of the human ventricular myocyte have been analyzed in detail. The present study employs a recently developed mathematical model of the human atrial myocyte to investigate the consequences of this heterogeneous cell-cell interaction on the action potential of the human atrium. Two independent physiological processes which alter the physiology of the human atrium have been studied. i) The effects of the autonomic transmitter acetylcholine on the atrial action potential have been investigated by inclusion of a time-independent, acetylcholine-activated K+ current in this mathematical model of the atrial myocyte. ii) A non-selective cation current which is activated by natriuretic peptides has been incorporated into a previously published mathematical model of the cardiac fibroblast. These results identify subtle effects of acetylcholine, which arise from the nonlinear interactions between ionic currents in the human atrial myocyte. They also illustrate marked alterations in the action potential waveform arising from fibroblast-myocyte source-sink principles when the natriuretic peptide-mediated cation conductance is activated. Additional calculations also illustrate the effects of simultaneous activation of both of these cell-type specific conductances within the atrial myocardium. This study provides a basis for beginning to assess the utility of mathematical modeling in understanding detailed cell-cell interactions within the complex paracrine environment of the human atrial myocardium.
  //
  // The complete original paper reference is cited below:
  //
  // Mathematical simulations of ligand-gated and cell-type specific effects on the action potential of human atrium (http://www.ncbi.nlm.nih.gov/pubmed/19186188?ordinalpos=1&itool=EntrezSystem2.PEntrez.Pubmed.Pubmed_ResultsPanel.Pubmed_DefaultReportPanel.Pubmed_RVDocSum), Mary M. Maleckara, Joseph L. Greensteina, Natalia A. Trayanova and Wayne R. Giles, 2009, Progress in Biophysics and Molecular Biology (http://www.sciencedirect.com/science/journal/00796107), Currently in press (available online). (Full text (http://www.sciencedirect.com/science?_ob=ArticleURL&_udi=B6TBN-4VGVH2H-1&_user=140507&_rdoc=1&_fmt=&_orig=search&_sort=d&view=c&_acct=C000011498&_version=1&_urlVersion=0&_userid=140507&md5=c651b6d18883c1195d9bd715f07e0b76) and PDF versions of the article are available to subscribers on the journal website.) PubMed ID: 19186188 (http://www.ncbi.nlm.nih.gov/pubmed/19186188?ordinalpos=1&itool=EntrezSystem2.PEntrez.Pubmed.Pubmed_ResultsPanel.Pubmed_DefaultReportPanel.Pubmed_RVDocSum)
  //
  // cell diagram
  //
  // Schematic diagram of the human atrial myocyte model. It includes the main time- and voltage-dependent ion currents which contribute to the generation of the human atrial action potential: INa, ICa,L, It, Ikur, IK1, IKr, and IKs. This model also includes electrogenic pump and exchanger currents: the sarcolemmal Ca2+ pump current (ICa,P), the Na+-Ca2+ exchanger current (INaCa), and the Na+-K+ pump current (INaK). These transporters are responsible for the maintenance of intracellular ion concentrations, and are balanced by Na+ and Ca2+ time-independent or background currents, IBNa and IBCa.
  def unit pA_per_pF as
    unit ampere {pref: pico};
    unit farad {pref: pico, expo: -1};
  enddef;
  def unit pA_per_nF as
    unit ampere {pref: pico};
    unit farad {pref: nano, expo: -1};
  enddef;
  def unit nanoS_per_nF as
    unit siemens {pref: nano};
    unit farad {pref: nano, expo: -1};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar15 as
    unit millimolar {expo: 1.5};
  enddef;
  def unit per_millimolar_4 as
    unit millimolar {expo: -4};
  enddef;
  def unit picoA_per_millimolar as
    unit ampere {pref: pico};
    unit millimolar {expo: -1};
  enddef;
  def unit picoA_per_millimolar_4 as
    unit ampere {pref: pico};
    unit millimolar {expo: -4};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit nanolitre as
    unit litre {pref: nano};
  enddef;
  def unit nanolitre_per_second as
    unit litre {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -73.941851, pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 306.15, pub: out};
    var F: coulomb_per_mole {init: 96487, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: nanoF {init: 0.05, pub: out};
    var Q_tot: millivolt;
    var time: second {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_t: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_KACh: picoA {pub: in};
    var I: picoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: picoA {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_offset: second {init: 0.1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: second {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: second {init: 0.006};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: picoA {init: -310};
    var past: second;
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA};
    endsel;
    I = i_Na+i_Ca_L+i_t+i_Kur+i_K1+i_Kr+i_Ks+i_B_Na+i_B_Ca+i_NaK+i_CaP+i_NaCa+i_KACh+i_Stim;
    ode(V, time) = -I/Cm;
    Q_tot = 0.05{dimensionless}*V;
  enddef;

  def comp sodium_current as
    var i_Na: picoA {pub: out};
    var E_Na: millivolt {pub: out};
    var P_Na: nanolitre_per_second {init: 0.0018};
    // modifiable-parameter: yes
    var ScaleFactorGna: dimensionless {init: 1.0};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Na_c: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var m: dimensionless {priv: in};
    var h1: dimensionless {priv: in};
    var h2: dimensionless {priv: in};
    i_Na = ScaleFactorGna*P_Na*m*m*m*(0.9{dimensionless}*h1+0.1{dimensionless}*h2)*Na_c*V*F*F/(R*T)*(exp((V-E_Na)*F/(R*T))-1{dimensionless})/(exp(V*F/(R*T))-1{dimensionless});
    E_Na = R*T/F*ln(Na_c/Na_i);
  enddef;

  def comp sodium_current_m_gate as
    var m: dimensionless {init: 0.003325, pub: out};
    var m_infinity: dimensionless;
    var m_factor: dimensionless;
    var tau_m: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(m, time) = (m_infinity-m)/tau_m;
    m_factor = (V+25.57{millivolt})/28.8{millivolt};
    m_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+27.12{millivolt})/(-8.21{millivolt})));
    tau_m = 0.000042{second}*exp(-m_factor*m_factor)+0.000024{second};
  enddef;

  def comp sodium_current_h1_gate as
    var h1: dimensionless {init: 0.875262, pub: out};
    var h_infinity: dimensionless {pub: out};
    var h_factor: dimensionless {pub: out};
    var tau_h1: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(h1, time) = (h_infinity-h1)/tau_h1;
    h_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+63.6{millivolt})/5.3{millivolt}));
    h_factor = 1{dimensionless}/(1{dimensionless}+exp((V+35.1{millivolt})/3.2{millivolt}));
    tau_h1 = 0.03{second}*h_factor+0.0003{second};
  enddef;

  def comp sodium_current_h2_gate as
    var h2: dimensionless {init: 0.870692, pub: out};
    var h_infinity: dimensionless {pub: in};
    var h_factor: dimensionless {pub: in};
    var tau_h2: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(h2, time) = (h_infinity-h2)/tau_h2;
    tau_h2 = 0.12{second}*h_factor+0.003{second};
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L: picoA {pub: out};
    var g_Ca_L: nanoS {init: 6.75};
    // modifiable-parameter: yes
    var ScaleFactorGCaL: dimensionless {init: 1.0};
    var E_Ca_app: millivolt {init: 60};
    var f_Ca: dimensionless;
    var k_Ca: millimolar {init: 0.025};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var Ca_d: millimolar {pub: in};
    var d_L: dimensionless {priv: in};
    var f_L1: dimensionless {priv: in};
    var f_L2: dimensionless {priv: in};
    i_Ca_L = ScaleFactorGCaL*g_Ca_L*d_L*(f_Ca*f_L1+(1{dimensionless}-f_Ca)*f_L2)*(V-E_Ca_app);
    f_Ca = Ca_d/(Ca_d+k_Ca);
  enddef;

  def comp L_type_Ca_channel_d_L_gate as
    var d_L: dimensionless {init: 0.000014, pub: out};
    var d_L_infinity: dimensionless;
    var d_L_factor: dimensionless;
    var tau_d_L: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
    d_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+9{millivolt})/(-5.8{millivolt})));
    d_L_factor = (V+35{millivolt})/30{millivolt};
    tau_d_L = 0.0027{second}*exp(-d_L_factor*d_L_factor)+0.002{second};
  enddef;

  def comp L_type_Ca_channel_f_L1_gate as
    var f_L1: dimensionless {init: 0.998578, pub: out};
    var f_L_infinity: dimensionless {pub: out};
    var f_L_factor: millivolt {pub: out};
    var tau_f_L1: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f_L1, time) = (f_L_infinity-f_L1)/tau_f_L1;
    f_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+27.4{millivolt})/7.1{millivolt}));
    f_L_factor = V+40{millivolt};
    tau_f_L1 = 0.161{second}*exp(-f_L_factor*f_L_factor/14.4{millivolt}/14.4{millivolt})+0.01{second};
  enddef;

  def comp L_type_Ca_channel_f_L2_gate as
    var f_L2: dimensionless {init: 0.998561, pub: out};
    var tau_f_L2: second;
    var f_L_infinity: dimensionless {pub: in};
    var f_L_factor: millivolt {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f_L2, time) = (f_L_infinity-f_L2)/tau_f_L2;
    tau_f_L2 = 1.3323{second}*exp(-f_L_factor*f_L_factor/14.2{millivolt}/14.2{millivolt})+0.0626{second};
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    var i_t: picoA {pub: out};
    var E_K: millivolt {pub: out};
    var g_t: nanoS {init: 8.25};
    // modifiable-parameter: yes
    var ScaleFactorIto: dimensionless {init: 1.0};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_c: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var r: dimensionless {priv: in};
    var s: dimensionless {priv: in};
    i_t = ScaleFactorIto*g_t*r*s*(V-E_K);
    E_K = R*T/F*ln(K_c/K_i);
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    var r: dimensionless {init: 0.001098, pub: out};
    var tau_r: second;
    var r_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = (r_infinity-r)/tau_r;
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-1{millivolt})/(-11{millivolt})));
    tau_r = 0.0035{second}*exp(-V*V/30{millivolt}/30{millivolt})+0.0015{second};
  enddef;

  def comp Ca_independent_transient_outward_K_current_s_gate as
    var s: dimensionless {init: 0.948202, pub: out};
    var tau_s: second;
    var s_infinity: dimensionless;
    var s_factor: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(s, time) = (s_infinity-s)/tau_s;
    s_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+40.5{millivolt})/11.5{millivolt}));
    s_factor = (V+52.45{millivolt})/15.8827{millivolt};
    tau_s = 0.025635{second}*exp(-s_factor*s_factor)+0.01414{second};
  enddef;

  def comp ultra_rapid_K_current as
    var i_Kur: picoA {pub: out};
    var g_kur: nanoS {init: 2.25};
    // modifiable-parameter: yes
    var ScaleFactorGKur: dimensionless {init: 1.0};
    var E_K: millivolt {pub: in};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var a_ur: dimensionless {priv: in};
    var i_ur: dimensionless {priv: in};
    i_Kur = ScaleFactorGKur*g_kur*a_ur*i_ur*(V-E_K);
  enddef;

  def comp ultra_rapid_K_current_aur_gate as
    var a_ur: dimensionless {init: 0.000371, pub: out};
    var a_ur_infinity: dimensionless;
    var tau_a_ur: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(a_ur, time) = (a_ur_infinity-a_ur)/tau_a_ur;
    a_ur_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+6{millivolt})/8.6{millivolt}));
    tau_a_ur = 0.009{second}/(1{dimensionless}+exp((V+5{millivolt})/12{millivolt}))+0.0005{second};
  enddef;

  def comp ultra_rapid_K_current_iur_gate as
    var i_ur: dimensionless {init: 0.966869, pub: out};
    var i_ur_infinity: dimensionless;
    var tau_i_ur: second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(i_ur, time) = (i_ur_infinity-i_ur)/tau_i_ur;
    i_ur_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+7.5{millivolt})/10{millivolt}));
    tau_i_ur = 0.59{second}/(1{dimensionless}+exp((V+60{millivolt})/10{millivolt}))+3.05{second};
  enddef;

  def comp inward_rectifier as
    var i_K1: picoA {pub: out};
    var g_K1: nanoS {init: 3.1};
    // modifiable-parameter: yes
    var ScaleFactorGK1: dimensionless {init: 1.0};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var K_c: millimolar {pub: in};
    var E_K: millivolt {pub: in};
    i_K1 = ScaleFactorGK1*g_K1*pow(K_c/1{millimolar}, 0.4457{dimensionless})*(V-E_K)/(1{dimensionless}+exp(1.5{dimensionless}*(V-E_K+3.6{millivolt})*F/(R*T)));
  enddef;

  def comp delayed_rectifier_K_currents as
    var i_Ks: picoA {pub: out};
    var i_Kr: picoA {pub: out};
    var g_Ks: nanoS {init: 1};
    // modifiable-parameter: yes
    var ScaleFactorGks: dimensionless {init: 1.0};
    var g_Kr: nanoS {init: 0.5};
    // modifiable-parameter: yes
    var ScaleFactorGkr: dimensionless {init: 1.0};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var E_K: millivolt {pub: in};
    var n: dimensionless {priv: in};
    var pa: dimensionless {priv: in};
    var pip: dimensionless {priv: in};
    var factorAZD: dimensionless;
    var AZD: dimensionless {priv: in};
    factorAZD = (1{dimensionless}-1{dimensionless}/(1{dimensionless}+exp(-(AZD-0.6{dimensionless})/0.12{dimensionless})))/0.9933{dimensionless};
    i_Ks = ScaleFactorGks*g_Ks*n*(V-E_K);
    i_Kr = ScaleFactorGkr*g_Kr*factorAZD*pa*pip*(V-E_K);
  enddef;

  def comp delayed_rectifier_K_currents_n_gate as
    var n: dimensionless {init: 0.004661, pub: out};
    var tau_n: second;
    var n_infinity: dimensionless;
    var n_factor: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(n, time) = (n_infinity-n)/tau_n;
    n_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-19.9{millivolt})/(-12.7{millivolt})));
    n_factor = (V-20{millivolt})/20{millivolt};
    tau_n = 0.7{second}+0.4{second}*exp(-n_factor*n_factor);
  enddef;

  def comp delayed_rectifier_K_currents_pa_gate as
    var pa: dimensionless {init: 0.000054, pub: out};
    var tau_pa: second;
    var pa_factor: dimensionless;
    var p_a_infinity: dimensionless;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    // modifiable-parameter: yes
    var AZD: dimensionless {init: 0, pub: out};
    ode(pa, time) = (p_a_infinity-pa)/tau_pa;
    p_a_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+15{millivolt}+10{millivolt}*AZD)/(-6{millivolt})));
    pa_factor = (V+20.1376{millivolt})/22.1996{millivolt};
    tau_pa = 0.03118{second}+0.21718{second}*exp(-pa_factor*pa_factor);
  enddef;

  def comp delayed_rectifier_K_currents_pi_gate as
    var pip: dimensionless {pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    pip = 1{dimensionless}/(1{dimensionless}+exp((V+55{millivolt})/24{millivolt}));
  enddef;

  def comp background_currents as
    var i_B_Na: picoA {pub: out};
    var i_B_Ca: picoA {pub: out};
    var g_B_Na: nanoS {init: 0.060599};
    var g_B_Ca: nanoS {init: 0.078681};
    var E_Ca: millivolt;
    var E_Na: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ca_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_B_Na = g_B_Na*(V-E_Na);
    i_B_Ca = g_B_Ca*(V-E_Ca);
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_c/Ca_i);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: picoA {pub: out};
    var K_NaK_K: millimolar {init: 1};
    var i_NaK_max: picoA {init: 68.55};
    // modifiable-parameter: yes
    var ScaleFactorGNaK: dimensionless {init: 1.0};
    var pow_K_NaK_Na_15: millimolar15 {init: 36.4829};
    var pow_Na_i_15: millimolar15;
    var K_c: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    pow_Na_i_15 = pow(Na_i, 1.5{dimensionless});
    i_NaK = ScaleFactorGNaK*i_NaK_max*K_c/(K_c+K_NaK_K)*pow_Na_i_15/(pow_Na_i_15+pow_K_NaK_Na_15)*(V+150{millivolt})/(V+200{millivolt});
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    var i_CaP: picoA {pub: out};
    var i_CaP_max: picoA {init: 4};
    var k_CaP: millimolar {init: 0.0002};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_CaP = i_CaP_max*Ca_i/(Ca_i+k_CaP);
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    var i_NaCa: picoA {pub: out};
    // modifiable-parameter: yes
    var ScaleFactorGNaCa: dimensionless {init: 1.0};
    var K_NaCa: picoA_per_millimolar_4 {init: 0.0374842};
    var d_NaCa: per_millimolar_4 {init: 0.0003};
    var gamma_Na: dimensionless {init: 0.45};
    var Na_i: millimolar {pub: in};
    var Na_c: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_c: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa = ScaleFactorGNaCa*(K_NaCa*(Na_i*Na_i*Na_i*Ca_c*exp(F*V*gamma_Na/(R*T))-Na_c*Na_c*Na_c*Ca_i*exp((gamma_Na-1{dimensionless})*V*F/(R*T)))/(1{dimensionless}+d_NaCa*(Na_c*Na_c*Na_c*Ca_i+Na_i*Na_i*Na_i*Ca_c)));
  enddef;

  def comp ACh_dependent_K_current as
    var i_KACh: picoA {pub: out};
    // modifiable-parameter: yes
    var ACh: millimolar {init: 1e-24};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Cm: nanoF {pub: in};
    i_KACh = 10000{nanoS_per_nF}/(1{dimensionless}+9.13652{dimensionless}*pow(1{millimolar}, 0.477811{dimensionless})/pow(ACh, 0.477811{dimensionless}))*(0.0517{dimensionless}+0.4516{dimensionless}/(1{dimensionless}+exp((V+59.53{millivolt})/17.18{millivolt})))*(V-E_K)*Cm;
  enddef;

  def comp intracellular_ion_concentrations as
    var Na_i: millimolar {init: 8.488527, pub: out};
    var Ca_i: millimolar {init: 6.5e-5, pub: out};
    var K_i: millimolar {init: 129.502075, pub: out};
    var Ca_d: millimolar {init: 7.1e-5, pub: out};
    var phi_Na_en: picoA {init: 0, pub: out};
    var Vol_i: nanolitre {init: 0.005884, pub: out};
    var Vol_d: nanolitre {init: 0.00011768};
    var i_di: picoA;
    var tau_di: second {init: 0.01};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cm: nanoF {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_t: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_KACh: picoA {pub: in};
    var i_up: picoA {pub: in};
    var i_rel: picoA {pub: in};
    var i_Stim: picoA {pub: in};
    var J_O: per_second {pub: in};
    ode(K_i, time) = -(i_t+i_Kur+i_K1+i_Ks+i_Kr+i_KACh-2{dimensionless}*i_NaK+i_Stim)/(Vol_i*F);
    ode(Na_i, time) = -(i_Na+i_B_Na+3{dimensionless}*i_NaCa+3{dimensionless}*i_NaK+phi_Na_en)/(Vol_i*F);
    ode(Ca_i, time) = -(i_B_Ca+i_CaP+i_up-(i_di+i_rel+2{dimensionless}*i_NaCa))/(2{dimensionless}*Vol_i*F)-1{millimolar}*J_O;
    ode(Ca_d, time) = -(i_Ca_L+i_di)/(2{dimensionless}*Vol_d*F);
    i_di = (Ca_d-Ca_i)*2{dimensionless}*Vol_d*F/tau_di;
  enddef;

  def comp intracellular_Ca_buffering as
    var O_C: dimensionless {init: 0.026604};
    var O_TC: dimensionless {init: 0.012843};
    var O_TMgC: dimensionless {init: 0.190077};
    var O_TMgMg: dimensionless {init: 0.714719};
    var O: dimensionless {init: 1.38222};
    var J_O_C: per_second;
    var J_O_TC: per_second;
    var J_O_TMgC: per_second;
    var J_O_TMgMg: per_second;
    var J_O: per_second {pub: out};
    var Mg_i: millimolar {init: 2.5};
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    J_O_C = 200000{per_millimolar_second}*Ca_i*(1{dimensionless}-O_C)-476{per_second}*O_C;
    J_O_TC = 78400{per_millimolar_second}*Ca_i*(1{dimensionless}-O_TC)-392{per_second}*O_TC;
    J_O_TMgC = 200000{per_millimolar_second}*Ca_i*(1{dimensionless}-O_TMgC-O_TMgMg)-6.6{per_second}*O_TMgC;
    J_O_TMgMg = 2000{per_millimolar_second}*Mg_i*(1{dimensionless}-O_TMgC-O_TMgMg)-666{per_second}*O_TMgMg;
    ode(O_C, time) = J_O_C;
    ode(O_TC, time) = J_O_TC;
    ode(O_TMgC, time) = J_O_TMgC;
    ode(O_TMgMg, time) = J_O_TMgMg;
    J_O = 0.08{dimensionless}*J_O_TC+0.16{dimensionless}*J_O_TMgC+0.045{dimensionless}*J_O_C;
    ode(O, time) = J_O;
  enddef;

  def comp cleft_space_ion_concentrations as
    var Na_c: millimolar {init: 130.019282, pub: out};
    var Ca_c: millimolar {init: 1.814418, pub: out};
    var K_c: millimolar {init: 5.588239, pub: out};
    var Vol_i: nanolitre {pub: in};
    var Vol_c: nanolitre {init: 0.000800224};
    var tau_Na: second {init: 14.3};
    var tau_K: second {init: 10};
    var tau_Ca: second {init: 24.7};
    var Na_b: millimolar {init: 130};
    var Ca_b: millimolar {init: 1.8};
    var K_b: millimolar {init: 5.4};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: picoA {pub: in};
    var i_Ca_L: picoA {pub: in};
    var i_t: picoA {pub: in};
    var i_Kur: picoA {pub: in};
    var i_K1: picoA {pub: in};
    var i_Kr: picoA {pub: in};
    var i_Ks: picoA {pub: in};
    var i_B_Na: picoA {pub: in};
    var i_B_Ca: picoA {pub: in};
    var i_NaK: picoA {pub: in};
    var i_CaP: picoA {pub: in};
    var i_NaCa: picoA {pub: in};
    var i_KACh: picoA {pub: in};
    var phi_Na_en: picoA {pub: in};
    ode(Ca_c, time) = (Ca_b-Ca_c)/tau_Ca+(i_Ca_L+i_B_Ca+i_CaP-2{dimensionless}*i_NaCa)/(2{dimensionless}*Vol_c*F);
    ode(K_c, time) = (K_b-K_c)/tau_K+(i_t+i_Kur+i_K1+i_Ks+i_Kr-2{dimensionless}*i_NaK)/(Vol_c*F);
    ode(Na_c, time) = (Na_b-Na_c)/tau_Na+(i_Na+i_B_Na+3{dimensionless}*i_NaCa+3{dimensionless}*i_NaK+phi_Na_en)/(Vol_c*F);
  enddef;

  def comp Ca_handling_by_the_SR as
    var i_rel: picoA {pub: out};
    var i_up: picoA {pub: out};
    var i_tr: picoA;
    var I_up_max: picoA {init: 2800};
    var k_cyca: millimolar {init: 0.0003};
    var k_srca: millimolar {init: 0.5};
    var k_xcs: dimensionless {init: 0.4};
    var alpha_rel: picoA_per_millimolar {init: 200000};
    var Ca_rel: millimolar {init: 0.630471};
    var Ca_up: millimolar {init: 0.646226};
    var Vol_up: nanolitre {init: 0.0003969};
    var Vol_rel: nanolitre {init: 0.0000441};
    var r_act: per_second;
    var r_inact: per_second;
    var r_recov: per_second {init: 0.815};
    var r_Ca_d_term: dimensionless;
    var r_Ca_i_term: dimensionless;
    var r_Ca_d_factor: dimensionless;
    var r_Ca_i_factor: dimensionless;
    var i_rel_f2: dimensionless;
    var i_rel_factor: dimensionless;
    var O_Calse: dimensionless {init: 0.43071};
    var J_O_Calse: per_second;
    var F1: dimensionless {init: 0.45453};
    var F2: dimensionless {init: 0.002665};
    var tau_tr: second {init: 0.01};
    var k_rel_i: millimolar {init: 0.0003};
    var k_rel_d: millimolar {init: 0.003};
    var time: second {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_d: millimolar {pub: in};
    var F: coulomb_per_mole {pub: in};
    r_Ca_d_term = Ca_d/(Ca_d+k_rel_d);
    r_Ca_i_term = Ca_i/(Ca_i+k_rel_i);
    r_Ca_d_factor = r_Ca_d_term*r_Ca_d_term*r_Ca_d_term*r_Ca_d_term;
    r_Ca_i_factor = r_Ca_i_term*r_Ca_i_term*r_Ca_i_term*r_Ca_i_term;
    r_act = 203.8{per_second}*(r_Ca_i_factor+r_Ca_d_factor);
    r_inact = 33.96{per_second}+339.6{per_second}*r_Ca_i_factor;
    ode(F1, time) = r_recov*(1{dimensionless}-F1-F2)-r_act*F1;
    ode(F2, time) = r_act*F1-r_inact*F2;
    i_rel_f2 = F2/(F2+0.25{dimensionless});
    i_rel_factor = i_rel_f2*i_rel_f2;
    i_rel = alpha_rel*i_rel_factor*(Ca_rel-Ca_i);
    i_up = I_up_max*(Ca_i/k_cyca-k_xcs*k_xcs*Ca_up/k_srca)/((Ca_i+k_cyca)/k_cyca+k_xcs*(Ca_up+k_srca)/k_srca);
    i_tr = (Ca_up-Ca_rel)*2{dimensionless}*Vol_rel*F/tau_tr;
    J_O_Calse = 480{per_millimolar_second}*Ca_rel*(1{dimensionless}-O_Calse)-400{per_second}*O_Calse;
    ode(O_Calse, time) = J_O_Calse;
    ode(Ca_up, time) = (i_up-i_tr)/(2{dimensionless}*Vol_up*F);
    ode(Ca_rel, time) = (i_tr-i_rel)/(2{dimensionless}*Vol_rel*F)-31{millimolar}*J_O_Calse;
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_current incl
        comp sodium_current_m_gate;
        comp sodium_current_h1_gate;
        comp sodium_current_h2_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_L_gate;
        comp L_type_Ca_channel_f_L1_gate;
        comp L_type_Ca_channel_f_L2_gate;
      endcomp;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_r_gate;
        comp Ca_independent_transient_outward_K_current_s_gate;
      endcomp;
      comp delayed_rectifier_K_currents incl
        comp delayed_rectifier_K_currents_n_gate;
        comp delayed_rectifier_K_currents_pa_gate;
        comp delayed_rectifier_K_currents_pi_gate;
      endcomp;
      comp ultra_rapid_K_current incl
        comp ultra_rapid_K_current_aur_gate;
        comp ultra_rapid_K_current_iur_gate;
      endcomp;
      comp inward_rectifier;
      comp background_currents;
      comp sodium_potassium_pump;
      comp sarcolemmal_calcium_pump_current;
      comp Na_Ca_ion_exchanger_current;
      comp ACh_dependent_K_current;
      comp Ca_handling_by_the_SR;
      comp intracellular_ion_concentrations;
      comp intracellular_Ca_buffering;
      comp cleft_space_ion_concentrations;
    endcomp;
  enddef;

  def group as encapsulation for
    comp sodium_current incl
      comp sodium_current_m_gate;
      comp sodium_current_h1_gate;
      comp sodium_current_h2_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_L_gate;
      comp L_type_Ca_channel_f_L1_gate;
      comp L_type_Ca_channel_f_L2_gate;
    endcomp;
    comp Ca_independent_transient_outward_K_current incl
      comp Ca_independent_transient_outward_K_current_r_gate;
      comp Ca_independent_transient_outward_K_current_s_gate;
    endcomp;
    comp delayed_rectifier_K_currents incl
      comp delayed_rectifier_K_currents_n_gate;
      comp delayed_rectifier_K_currents_pa_gate;
      comp delayed_rectifier_K_currents_pi_gate;
    endcomp;
    comp ultra_rapid_K_current incl
      comp ultra_rapid_K_current_aur_gate;
      comp ultra_rapid_K_current_iur_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current and environment for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_currents and environment for
    vars time and time;
  enddef;
  def map between inward_rectifier and environment for
    vars time and time;
  enddef;
  def map between ultra_rapid_K_current and environment for
    vars time and time;
  enddef;
  def map between background_currents and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sarcolemmal_calcium_pump_current and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_ion_exchanger_current and environment for
    vars time and time;
  enddef;
  def map between Ca_handling_by_the_SR and environment for
    vars time and time;
  enddef;
  def map between intracellular_Ca_buffering and environment for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between cleft_space_ion_concentrations and environment for
    vars time and time;
  enddef;
  def map between membrane and sodium_current for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and Ca_independent_transient_outward_K_current for
    vars V and V;
    vars i_t and i_t;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and inward_rectifier for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and delayed_rectifier_K_currents for
    vars V and V;
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and ultra_rapid_K_current for
    vars V and V;
    vars i_Kur and i_Kur;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sarcolemmal_calcium_pump_current for
    vars i_CaP and i_CaP;
  enddef;
  def map between membrane and Na_Ca_ion_exchanger_current for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and ACh_dependent_K_current for
    vars V and V;
    vars i_KACh and i_KACh;
    vars Cm and Cm;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
    vars Cm and Cm;
    vars i_Stim and i_Stim;
  enddef;
  def map between membrane and cleft_space_ion_concentrations for
    vars F and F;
  enddef;
  def map between membrane and Ca_handling_by_the_SR for
    vars F and F;
  enddef;
  def map between sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between sodium_current and cleft_space_ion_concentrations for
    vars i_Na and i_Na;
    vars Na_c and Na_c;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
    vars Ca_d and Ca_d;
  enddef;
  def map between L_type_Ca_channel and cleft_space_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars i_t and i_t;
    vars K_i and K_i;
  enddef;
  def map between Ca_independent_transient_outward_K_current and cleft_space_ion_concentrations for
    vars i_t and i_t;
    vars K_c and K_c;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and delayed_rectifier_K_currents for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and ultra_rapid_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and ACh_dependent_K_current for
    vars E_K and E_K;
  enddef;
  def map between delayed_rectifier_K_currents and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between delayed_rectifier_K_currents and cleft_space_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between ultra_rapid_K_current and intracellular_ion_concentrations for
    vars i_Kur and i_Kur;
  enddef;
  def map between ultra_rapid_K_current and cleft_space_ion_concentrations for
    vars i_Kur and i_Kur;
  enddef;
  def map between inward_rectifier and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between inward_rectifier and cleft_space_ion_concentrations for
    vars i_K1 and i_K1;
    vars K_c and K_c;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars Ca_i and Ca_i;
  enddef;
  def map between background_currents and cleft_space_ion_concentrations for
    vars i_B_Na and i_B_Na;
    vars i_B_Ca and i_B_Ca;
    vars Ca_c and Ca_c;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and cleft_space_ion_concentrations for
    vars i_NaK and i_NaK;
    vars K_c and K_c;
  enddef;
  def map between sarcolemmal_calcium_pump_current and intracellular_ion_concentrations for
    vars i_CaP and i_CaP;
    vars Ca_i and Ca_i;
  enddef;
  def map between sarcolemmal_calcium_pump_current and cleft_space_ion_concentrations for
    vars i_CaP and i_CaP;
  enddef;
  def map between Na_Ca_ion_exchanger_current and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars Na_i and Na_i;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between Na_Ca_ion_exchanger_current and cleft_space_ion_concentrations for
    vars Ca_c and Ca_c;
    vars Na_c and Na_c;
    vars i_NaCa and i_NaCa;
  enddef;
  def map between ACh_dependent_K_current and intracellular_ion_concentrations for
    vars i_KACh and i_KACh;
  enddef;
  def map between ACh_dependent_K_current and cleft_space_ion_concentrations for
    vars i_KACh and i_KACh;
  enddef;
  def map between Ca_handling_by_the_SR and intracellular_ion_concentrations for
    vars i_rel and i_rel;
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_d and Ca_d;
  enddef;
  def map between cleft_space_ion_concentrations and intracellular_ion_concentrations for
    vars phi_Na_en and phi_Na_en;
    vars Vol_i and Vol_i;
  enddef;
  def map between intracellular_Ca_buffering and intracellular_ion_concentrations for
    vars Ca_i and Ca_i;
    vars J_O and J_O;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h1_gate for
    vars h1 and h1;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current and sodium_current_h2_gate for
    vars h2 and h2;
    vars time and time;
    vars V and V;
  enddef;
  def map between sodium_current_h1_gate and sodium_current_h2_gate for
    vars h_infinity and h_infinity;
    vars h_factor and h_factor;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_L_gate for
    vars d_L and d_L;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L1_gate for
    vars f_L1 and f_L1;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L2_gate for
    vars f_L2 and f_L2;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel_f_L1_gate and L_type_Ca_channel_f_L2_gate for
    vars f_L_infinity and f_L_infinity;
    vars f_L_factor and f_L_factor;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_n_gate for
    vars n and n;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_pa_gate for
    vars pa and pa;
    vars AZD and AZD;
    vars time and time;
    vars V and V;
  enddef;
  def map between delayed_rectifier_K_currents and delayed_rectifier_K_currents_pi_gate for
    vars pip and pip;
    vars time and time;
    vars V and V;
  enddef;
  def map between ultra_rapid_K_current and ultra_rapid_K_current_aur_gate for
    vars a_ur and a_ur;
    vars time and time;
    vars V and V;
  enddef;
  def map between ultra_rapid_K_current and ultra_rapid_K_current_iur_gate for
    vars i_ur and i_ur;
    vars time and time;
    vars V and V;
  enddef;
enddef;
// rdf:#d003b9eb-7e64-407f-80b4-2fd29cc9216a
// li: Given Mary; Family Maleckar; Other M
// li: Given Joseph; Family Greenstein; Other L
// li: Given Natalia; Family Trayanova; Other A
// li: Given Wayne; Family Giles; Other R
// rdf:#3df1a0e6-429f-45fb-9835-4d1a5a7a03a5
// title: Progress in Biophysics and Molecular Biology
// rdf:#3456f3e3-1fd6-46a1-9431-826a91b2fdc4
// creator: FN Catherine Lloyd
// value: This CellML model is known to run in PCEnv and COR to recreate the published results. The units have been checked and are consistent.
// rdf:#283e45fe-74ed-422c-beff-b5bccdd0c5a9
// W3CDTF: 2009-01-00 00:00
// rdf:#a8048547-b2dd-4007-835b-d347327b350f
// title: Mathematical simulations of ligand-gated and cell-type specific effects on the action potential of human atrium
// rdf:#113722f0-be00-4c1e-a108-540fe0939647
// Pubmed_id: 19186188
