//   FILE :  noble_model_1998.xml
//
// CREATED :  18th December 2001
//
// LAST MODIFIED : 22nd July 2002
//
// AUTHOR :  Catherine Lloyd
//           Department of Engineering Science
//           The University of Auckland
//
// MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
// 10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.
//
// DESCRIPTION :  This file contains a CellML description of Noble's 1998 improved
// guinea-pig ventricular cell model.
//
// CHANGES:
//   04/01/2002 - CML - Altered some of the connections.
//   21/01/2002 - AAC - Updated metadata to conform to the 16/1/02 CellML Metadata
//                      1.0 Specification.
//   25/02/2002 - CML - Corrected i_K1 and i_K_ACh calculations.
//   26/02/2002 - CML - Corrected several more equations.
//   01/03/2002 - CML - Corrected units.
//   06/05/2002 - CML - Added some initial values.  Removed the blocked h_gate
//                      component from the fast sodium current as it belongs to a
//                      separate model which considers the effect of drugs.
//   22/07/2002 - CML - Added more metadata.
//   08/02/2003 - DPN - Added encapsulation hierarchy for transient_outward_current.
//   04/11/2007 - PJN - Units checked, curated
// publisher: Department of Physiology, Anatomy & Genetics, University of Oxford
// comment: FN James Lawson; This version was created by Penny Noble and is known to read into COR. James Lawson fixed an error (19/04/07) that prevented it reading in PCEnv (unsupported predefined operator diff in component intracellular_calcium_concentration. This variant of version 06 is parameterised for the BASIC model, excluding acetylcholine dependent modulation and electromechanical processes.
// created: W3CDTF 2007-05-03T00:00:00+00:00
// creator: Orgname University of Oxford; Orgunit Department of Physiology, Anatomy & Genetics; penny.noble@dpag.ox.ac.uk; Given Penny; Family Noble; Other J
// modification: W3CDTF 2008-05-14T03:12:08+12:00; Note that the missing i_NCX_ds component was added to the dCai/dt rather than the dCads/dt equation in order to achieve balance in the model.; Given Penny; Family Noble
// modification: W3CDTF 2007-12-04T15:09:12+13:00; Units checked, curated.; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-06-22T14:01:50+12:00; Several variables have been given cmeta:id's to allow creation of a PCEnv session file.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-02-06T14:05:00+13:00; This model has been curated by Penny Noble of Oxford University; Given Penny; Family Noble; Other J
// modification: W3CDTF 2007-09-06T12:57:25+12:00; Penny Noble was informed by a community member that INaCads was not included in the dCads/dt ODE and hence the system was out of balance. This has been fixed in version 07. An alteration was also made to the model to remove two differential expressions in the intracellular_calcium concentration component to allow PCEnv 0.2 to run the model.; Given James; Family Lawson; Other Richard
// modification: W3CDTF 2007-07-18T12:58:29+12:00; Changed stim_end in stimulus protocol from 10.1 to 1,000,000 seconds; Given James; Family Lawson; Other Richard
// simulation: nonstandard-pointDensity 100000; maximumStepSize 0.001; nonstandard-algorithm bdf15
// simulation: nonstandard-pointDensity 50000; maximumStepSize 0.001
// reference: Pubmed_id 9487284; Given D; Family Noble; Given A; Family Varghese; Given P; Family Kohl; Given P; Family Noble; title Improved guinea-pig ventricular cell model incorporating a diadic space, IKr and IKs, and length- and tension-dependent processes.; volume 14(1); first_page 123; title Canadian Journal of Cardiology; W3CDTF 1998-01-01 00:00; last_page 134
// reference: subject_type keyword; diadic space; excitation-contraction coupling; Ventricular Myocyte; ventricular myocyte; electrophysiology; myofilament mechanics; cardiac
// comment: FN James Lawson; This file is a CellML description of Noble, Carghese, Kohl and Noble's 1998 extension of their 1991 guinea pig ventricular cell model. This model incorporates a diadic space, IKr and IKs currents, and length and tension dependent processes. Variant 1 is parameterised for the 'basic' model. To simulate multiple action potentials with this model the following integrator parameters must be used: max step size must be 0.001 or less, max point density must be 10,000 or more.
def model noble_varghese_kohl_noble_1998_basic as
  // Improved guinea-pig ventricular cell model incorporating a diadic space, IKr and IKs, and length- and tension-dependent processes
  //
  // Penny Noble
  //
  // Oxford University
  //
  // Model Status
  //
  // This version has been curated and unit checked by Penny Noble and is known to run into COR and PCEnv. This variant is parameterised for the BASIC model, excluding acetylcholine dependent modulation and electromechanical processes. This model is also associated with a PCEnv session file.
  //
  // Model Structure
  //
  // ABSTRACT: The guinea-pig ventricular cell model, originally developed by Noble et al in 1991, has been greatly extended to include accumulation and depletion of calcium in a diadic space between the sarcolemma and the sarcoplasmic reticulum where, according to contempory understanding, the majority of calcium-induced calcium release is triggered. The calcium in this space is also assumed to play the major role in calcium-induced inactivation of the calcium current. Delayed potassium current equations have been developed to include the rapid (IKr) and slow (IKs) components of the delayed rectifier current based on the data of of Heath and Terrar, along with data from Sanguinetti and Jurkiewicz. Length- and tension-dependent changes in mechanical and electrophysiological processes have been incorporated as described recently by Kohl et al. Drug receptor interactions have started to be developed, using the sodium channel as the first target. The new model has been tested against experimental data on action potential clamp, and on force-interval and duration-interval relations; it has been found to reliably reproduce experimental observations.
  //
  // The original paper reference is cited below:
  //
  // Improved guinea-pig ventricular cell model incorporating a diadic space, IKr and IKs, and length- and tension-dependent processes, Denis Noble, Anthony Varghese, Peter Kohl and Penelope Noble, 1998, Can J Cardiol, 14, 123-134. PubMed ID: 9487284 (http://www.ncbi.nlm.nih.gov/pubmed/9487284)
  //
  // cell diagram of Noble'98 model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the Noble'98 model.
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit mA_nA as
    unit ampere {pref: milli};
    unit nanoA {expo: -1};
  enddef;
  def unit nanoA_per_millimolar as
    unit ampere {pref: nano};
    unit millimolar {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit millimolar4 as
    unit millimolar {expo: 4};
  enddef;
  def unit millimolar_per_second as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar_second as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit joule_per_kilomole_kelvin as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit litre_micrometre3 as
    unit litre;
    unit micrometre3 {expo: -1};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: second {pub: out};
  enddef;

  def comp membrane as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: millivolt {init: -92.849333, pub: out};
    var R: joule_per_kilomole_kelvin {init: 8314.472, pub: out};
    var T: kelvin {init: 310, pub: out};
    var F: coulomb_per_mole {init: 96485.3415, pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: microF {init: 9.5e-5};
    var time: second {pub: in};
    var i_K1: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_Ca_L_K_cyt: nanoA {pub: in};
    var i_Ca_L_K_ds: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_p_Na: nanoA {pub: in};
    var i_Ca_L_Na_cyt: nanoA {pub: in};
    var i_Ca_L_Na_ds: nanoA {pub: in};
    var i_NaCa_cyt: nanoA {pub: in};
    var i_NaCa_ds: nanoA {pub: in};
    var i_Ca_L_Ca_cyt: nanoA {pub: in};
    var i_Ca_L_Ca_ds: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: nanoA;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_start: second {init: 0.1};
    var stim_end: second {init: 100000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: second {init: 1};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: second {init: 0.003};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: nanoA {init: -3};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{nanoA};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Stim+i_K1+i_to+i_Kr+i_Ks+i_NaK+i_Na+i_b_Na+i_p_Na+i_Ca_L_Na_cyt+i_Ca_L_Na_ds+i_NaCa_cyt+i_NaCa_ds+i_Ca_L_Ca_cyt+i_Ca_L_Ca_ds+i_Ca_L_K_cyt+i_Ca_L_K_ds+i_b_Ca);
  enddef;

  def comp reversal_potentials as
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var E_Ks: millivolt {pub: out};
    var E_Ca: millivolt {pub: out};
    var E_mh: millivolt {pub: out};
    var P_kna: dimensionless {init: 0.03};
    var K_o: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    E_Na = R*T/F*ln(Na_o/Na_i);
    E_K = R*T/F*ln(K_o/K_i);
    E_Ks = R*T/F*ln((K_o+P_kna*Na_o)/(K_i+P_kna*Na_i));
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Ca_o/Ca_i);
    E_mh = R*T/F*ln((Na_o+0.12{dimensionless}*K_o)/(Na_i+0.12{dimensionless}*K_i));
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: nanoA {pub: out};
    var K_mk1: millimolar {init: 10, pub: out};
    var g_K1: microS {init: 0.5};
    var K_o: millimolar {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {pub: in};
    i_K1 = g_K1*K_o/(K_o+K_mk1)*(V-E_K)/(1{dimensionless}+exp((V-E_K-10{millivolt})*F*1.25{dimensionless}/(R*T)));
  enddef;

  def comp rapid_delayed_rectifier_potassium_current as
    var i_Kr: nanoA {pub: out};
    var g_Kr1: microS {init: 0.0021};
    var g_Kr2: microS {init: 0.0013};
    var E_K: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var xr1: dimensionless {priv: in};
    var xr2: dimensionless {priv: in};
    i_Kr = (g_Kr1*xr1+g_Kr2*xr2)*1{dimensionless}/(1{dimensionless}+exp((V+9{millivolt})/22.4{millivolt}))*(V-E_K);
  enddef;

  def comp rapid_delayed_rectifier_potassium_current_xr1_gate as
    var xr1: dimensionless {init: 1.03e-5, pub: out};
    var V: millivolt {pub: in};
    var alpha_xr1: per_second;
    var beta_xr1: per_second;
    var time: second {pub: in};
    alpha_xr1 = 50{per_second}/(1{dimensionless}+exp(-(V-5{millivolt})/9{millivolt}));
    beta_xr1 = 0.05{per_second}*exp(-(V-20{millivolt})/15{millivolt});
    ode(xr1, time) = alpha_xr1*(1{dimensionless}-xr1)-beta_xr1*xr1;
  enddef;

  def comp rapid_delayed_rectifier_potassium_current_xr2_gate as
    var xr2: dimensionless {init: 2e-7, pub: out};
    var V: millivolt {pub: in};
    var alpha_xr2: per_second;
    var beta_xr2: per_second;
    var time: second {pub: in};
    alpha_xr2 = 50{per_second}/(1{dimensionless}+exp(-(V-5{millivolt})/9{millivolt}));
    beta_xr2 = 0.4{per_second}*exp(-pow((V+30{millivolt})/30{millivolt}, 3{dimensionless}));
    ode(xr2, time) = alpha_xr2*(1{dimensionless}-xr2)-beta_xr2*xr2;
  enddef;

  def comp slow_delayed_rectifier_potassium_current as
    var i_Ks: nanoA {pub: out};
    var g_Ks: microS {init: 0.0026};
    var E_Ks: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var xs: dimensionless {priv: in};
    i_Ks = g_Ks*sqr(xs)*(V-E_Ks);
  enddef;

  def comp slow_delayed_rectifier_potassium_current_xs_gate as
    var xs: dimensionless {init: 0.001302, pub: out};
    var V: millivolt {pub: in};
    var alpha_xs: per_second;
    var beta_xs: per_second;
    var time: second {pub: in};
    alpha_xs = 14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt})/9{millivolt}));
    beta_xs = 1{per_second}*exp(-V/45{millivolt});
    ode(xs, time) = alpha_xs*(1{dimensionless}-xs)-beta_xs*xs;
  enddef;

  def comp fast_sodium_current as
    var i_Na: nanoA {pub: out};
    var g_Na: microS {init: 2.5};
    var E_mh: millivolt {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {init: 0.0016203, pub: out};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: millivolt {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {init: 0.9944036, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var shift_h: millivolt {init: 0};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}-shift_h));
    beta_h = 2000{per_second}/(1{dimensionless}+320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}-shift_h)));
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp persistent_sodium_current as
    var i_p_Na: nanoA {pub: out};
    var g_pna: microS {init: 0.004};
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_p_Na = g_pna*1{dimensionless}/(1{dimensionless}+exp(-(V+52{millivolt})/8{millivolt}))*(V-E_Na);
  enddef;

  def comp sodium_background_current as
    var i_b_Na: nanoA {pub: out};
    var g_bna: microS {init: 0.0006};
    var Na_i: millimolar {pub: in};
    var E_Na: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Na = g_bna*(V-E_Na);
  enddef;

  def comp L_type_Ca_channel as
    var i_Ca_L_Ca_cyt: nanoA {pub: out};
    var i_Ca_L_K_cyt: nanoA {pub: out};
    var i_Ca_L_Na_cyt: nanoA {pub: out};
    var i_Ca_L_Ca_ds: nanoA {pub: out};
    var i_Ca_L_K_ds: nanoA {pub: out};
    var i_Ca_L_Na_ds: nanoA {pub: out};
    var i_Ca_L: nanoA {pub: out};
    var P_Ca_L: nanoA_per_millimolar {init: 0.1};
    var P_CaK: dimensionless {init: 0.002};
    var P_CaNa: dimensionless {init: 0.01};
    var Ca_o: millimolar {pub: in};
    var Ca_i: millimolar {priv: out, pub: in};
    var Ca_ds: millimolar {priv: out, pub: in};
    var K_o: millimolar {pub: in};
    var K_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var time: second {priv: out, pub: in};
    var V: millivolt {priv: out, pub: in};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    var f2ds: dimensionless {priv: in};
    var Km_f2: millimolar {init: 100000, priv: out};
    var Km_f2ds: millimolar {init: 0.001, priv: out};
    var R_decay: per_second {init: 20, priv: out, pub: out};
    var FrICa: dimensionless {init: 1};
    i_Ca_L_Ca_cyt = (1{dimensionless}-FrICa)*4{dimensionless}*P_Ca_L*d*f*f2*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)))*(Ca_i*exp(100{millivolt}*F/(R*T))-Ca_o*exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)));
    i_Ca_L_K_cyt = (1{dimensionless}-FrICa)*P_CaK*P_Ca_L*d*f*f2*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(K_i*exp(50{millivolt}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na_cyt = (1{dimensionless}-FrICa)*P_CaNa*P_Ca_L*d*f*f2*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(Na_i*exp(50{millivolt}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Ca_ds = FrICa*4{dimensionless}*P_Ca_L*d*f*f2ds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)))*(Ca_i*exp(100{millivolt}*F/(R*T))-Ca_o*exp(-(V-50{millivolt})*F*2{dimensionless}/(R*T)));
    i_Ca_L_K_ds = FrICa*P_CaK*P_Ca_L*d*f*f2ds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(K_i*exp(50{millivolt}*F/(R*T))-K_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L_Na_ds = FrICa*P_CaNa*P_Ca_L*d*f*f2ds*(V-50{millivolt})*F/(R*T)/(1{dimensionless}-exp(-(V-50{millivolt})*F/(R*T)))*(Na_i*exp(50{millivolt}*F/(R*T))-Na_o*exp(-(V-50{millivolt})*F/(R*T)));
    i_Ca_L = i_Ca_L_Ca_cyt+i_Ca_L_K_cyt+i_Ca_L_Na_cyt+i_Ca_L_Ca_ds+i_Ca_L_K_ds+i_Ca_L_Na_ds;
  enddef;

  def comp L_type_Ca_channel_d_gate as
    var d: dimensionless {init: 0, pub: out};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var E0_d: millivolt;
    var speed_d: dimensionless {init: 3};
    E0_d = V+24{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < 0.0001{millivolt}:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = speed_d*(alpha_d*(1{dimensionless}-d)-beta_d*d);
  enddef;

  def comp L_type_Ca_channel_f_gate as
    var f: dimensionless {init: 1, pub: out};
    var alpha_f: per_second;
    var beta_f: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var speed_f: dimensionless {init: 0.3};
    var delta_f: millivolt {init: 0.0001};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f = sel
      case abs(E0_f) < delta_f:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f = 12{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    ode(f, time) = speed_f*(alpha_f*(1{dimensionless}-f)-beta_f*f);
  enddef;

  def comp L_type_Ca_channel_f2_gate as
    var f2: dimensionless {init: 0.9349197, pub: out};
    var Km_f2: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f2, time) = 1{per_second}-1{per_second}*(Ca_i/(Km_f2+Ca_i)+f2);
  enddef;

  def comp L_type_Ca_channel_f2ds_gate as
    var f2ds: dimensionless {init: 0.9651958, pub: out};
    var Km_f2ds: millimolar {pub: in};
    var R_decay: per_second {pub: in};
    var Ca_ds: millimolar {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(f2ds, time) = R_decay*(1{dimensionless}-(Ca_ds/(Km_f2ds+Ca_ds)+f2ds));
  enddef;

  def comp calcium_background_current as
    var i_b_Ca: nanoA {pub: out};
    var g_bca: microS {init: 0.00025};
    var E_Ca: millivolt {pub: in};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    i_b_Ca = g_bca*(V-E_Ca);
  enddef;

  def comp transient_outward_current as
    var i_to: nanoA {pub: out};
    var g_to: microS {init: 0.005};
    var g_tos: dimensionless {init: 0};
    var E_K: millivolt {pub: in};
    var V: millivolt {priv: out, pub: in};
    var time: second {priv: out, pub: in};
    var s: dimensionless {priv: in};
    var r: dimensionless {priv: in};
    i_to = g_to*(g_tos+s*(1{dimensionless}-g_tos))*r*(V-E_K);
  enddef;

  def comp transient_outward_current_s_gate as
    var s: dimensionless {init: 0.9948645, pub: out};
    var alpha_s: per_second;
    var beta_s: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_s = 0.033{per_second}*exp(-V/17{millivolt});
    beta_s = 33{per_second}/(1{dimensionless}+exp(-0.125{per_millivolt}*(V+10{millivolt})));
    ode(s, time) = alpha_s*(1{dimensionless}-s)-beta_s*s;
  enddef;

  def comp transient_outward_current_r_gate as
    var r: dimensionless {init: 0, pub: out};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    ode(r, time) = 333{per_second}*(1{dimensionless}/(1{dimensionless}+exp(-(V+4{millivolt})/5{millivolt}))-r);
  enddef;

  def comp sodium_potassium_pump as
    var i_NaK: nanoA {pub: out};
    var i_NaK_max: nanoA {init: 0.7};
    var K_mK: millimolar {init: 1};
    var K_mNa: millimolar {init: 40};
    var K_o: millimolar {pub: in};
    var Na_i: millimolar {pub: in};
    var time: second {pub: in};
    i_NaK = i_NaK_max*K_o/(K_mK+K_o)*Na_i/(K_mNa+Na_i);
  enddef;

  def comp sodium_calcium_exchanger as
    var i_NaCa: nanoA {pub: out};
    var i_NaCa_cyt: nanoA {pub: out};
    var i_NaCa_ds: nanoA {pub: out};
    var k_NaCa: nanoA {init: 0.0005};
    var n_NaCa: dimensionless {init: 3};
    var d_NaCa: dimensionless {init: 0};
    var gamma: dimensionless {init: 0.5};
    var FRiNaCa: dimensionless {init: 0.001};
    var Na_i: millimolar {pub: in};
    var Na_o: millimolar {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_ds: millimolar {pub: in};
    var Ca_o: millimolar {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa_cyt = (1{dimensionless}-FRiNaCa)*k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_o, n_NaCa)*Ca_i)/((1{millimolar4}+d_NaCa*(Ca_i*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_i/0.0069{millimolar}));
    i_NaCa_ds = FRiNaCa*k_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_i, n_NaCa)*Ca_o-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Na_o, n_NaCa)*Ca_ds)/((1{millimolar4}+d_NaCa*(Ca_ds*pow(Na_o, n_NaCa)+Ca_o*pow(Na_i, n_NaCa)))*(1{dimensionless}+Ca_ds/0.0069{millimolar}));
    i_NaCa = i_NaCa_cyt+i_NaCa_ds;
  enddef;

  def comp sarcoplasmic_reticulum_calcium_pump as
    var i_up: millimolar_per_second {pub: out};
    var K_1: dimensionless;
    var K_2: millimolar;
    var K_cyca: millimolar {init: 0.0003};
    var K_xcs: dimensionless {init: 0.4};
    var K_srca: millimolar {init: 0.5};
    var alpha_up: millimolar_per_second {init: 0.4};
    var beta_up: millimolar_per_second {init: 0.03};
    var Ca_i: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    K_1 = K_cyca*K_xcs/K_srca;
    K_2 = Ca_i+Ca_up*K_1+K_cyca*K_xcs+K_cyca;
    i_up = Ca_i/K_2*alpha_up-Ca_up*K_1/K_2*beta_up;
  enddef;

  def comp calcium_translocation as
    var i_trans: millimolar_per_second {pub: out};
    var Ca_rel: millimolar {pub: in};
    var Ca_up: millimolar {pub: in};
    var time: second {pub: in};
    i_trans = 50{per_second}*(Ca_up-Ca_rel);
  enddef;

  def comp calcium_release as
    var i_rel: millimolar_per_second {pub: out};
    var VoltDep: dimensionless;
    var RegBindSite: dimensionless;
    var CaiReg: dimensionless;
    var CadsReg: dimensionless;
    var ActRate: per_second;
    var InactRate: per_second;
    var K_leak_rate: per_second {init: 0.05};
    var K_m_rel: per_second {init: 250};
    var K_m_Ca_cyt: millimolar {init: 0.0005};
    var K_m_Ca_ds: millimolar {init: 0.01};
    var PrecFrac: dimensionless;
    var ActFrac: dimensionless {init: 0.0042614};
    var ProdFrac: dimensionless {init: 0.4068154};
    var SpeedRel: dimensionless;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Ca_i: millimolar {pub: in};
    var Ca_ds: millimolar {pub: in};
    var Ca_rel: millimolar {pub: in};
    VoltDep = exp(0.08{per_millivolt}*(V-40{millivolt}));
    CaiReg = Ca_i/(Ca_i+K_m_Ca_cyt);
    CadsReg = Ca_ds/(Ca_ds+K_m_Ca_ds);
    RegBindSite = CaiReg+(1{dimensionless}-CaiReg)*CadsReg;
    ActRate = 0{per_second}*VoltDep+500{per_second}*sqr(RegBindSite);
    InactRate = 60{per_second}+500{per_second}*sqr(RegBindSite);
    SpeedRel = sel
      case V < -50{millivolt}:
        5{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    PrecFrac = 1{dimensionless}-ActFrac-ProdFrac;
    ode(ActFrac, time) = PrecFrac*SpeedRel*ActRate-ActFrac*SpeedRel*InactRate;
    ode(ProdFrac, time) = ActFrac*SpeedRel*InactRate-SpeedRel*1{per_second}*ProdFrac;
    i_rel = (sqr(ActFrac/(ActFrac+0.25{dimensionless}))*K_m_rel+K_leak_rate)*Ca_rel;
  enddef;

  def comp extracellular_sodium_concentration as
    var Na_o: millimolar {init: 140, pub: out};
  enddef;

  def comp intracellular_sodium_concentration as
    var Na_i: millimolar {init: 7.3321223, pub: out};
    var V_i: micrometre3 {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoA {pub: in};
    var i_b_Na: nanoA {pub: in};
    var i_p_Na: nanoA {pub: in};
    var i_Ca_L_Na_cyt: nanoA {pub: in};
    var i_Ca_L_Na_ds: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var i_NaCa_cyt: nanoA {pub: in};
    ode(Na_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_Na+i_p_Na+i_b_Na+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa_cyt+i_Ca_L_Na_cyt+i_Ca_L_Na_ds);
  enddef;

  def comp extracellular_calcium_concentration as
    var Ca_o: millimolar {init: 2, pub: out};
  enddef;

  def comp extracellular_potassium_concentration as
    var K_o: millimolar {init: 4, pub: out};
  enddef;

  def comp intracellular_potassium_concentration as
    var K_i: millimolar {init: 136.5644281, pub: out};
    var V_i: micrometre3 {pub: in};
    var i_K1: nanoA {pub: in};
    var i_Kr: nanoA {pub: in};
    var i_Ks: nanoA {pub: in};
    var i_Ca_L_K_cyt: nanoA {pub: in};
    var i_Ca_L_K_ds: nanoA {pub: in};
    var i_to: nanoA {pub: in};
    var i_NaK: nanoA {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(K_i, time) = -1{mA_nA}/(1{litre_micrometre3}*V_i*F)*(i_K1+i_Kr+i_Ks+i_Ca_L_K_cyt+i_Ca_L_K_ds+i_to-2{dimensionless}*i_NaK);
  enddef;

  def comp intracellular_calcium_concentration as
    var Ca_i: millimolar {init: 1.4e-5, pub: out};
    var Ca_ds: millimolar {init: 1.88e-5, pub: out};
    var Ca_up: millimolar {init: 0.4531889, pub: out};
    var Ca_rel: millimolar {init: 0.4481927, pub: out};
    var Ca_Calmod: millimolar {init: 0.0005555};
    var Ca_Trop: millimolar {init: 0.0003542};
    var Calmod: millimolar {init: 0.02};
    var Trop: millimolar {init: 0.05};
    var alpha_Calmod: per_millimolar_second {init: 100000};
    var beta_Calmod: per_second {init: 50};
    var alpha_Trop: per_millimolar_second {init: 100000};
    var beta_Trop: per_second {init: 200};
    var radius: micrometre {init: 0.012};
    var length: micrometre {init: 0.074};
    var V_i: micrometre3 {pub: out};
    var V_Cell: micrometre3;
    var V_i_ratio: dimensionless;
    var V_ds_ratio: dimensionless {init: 0.1};
    var V_rel_ratio: dimensionless {init: 0.1};
    var V_e_ratio: dimensionless {init: 0.4};
    var V_up_ratio: dimensionless {init: 0.01};
    var Kdecay: per_second {init: 10};
    var i_up: millimolar_per_second {pub: in};
    var i_trans: millimolar_per_second {pub: in};
    var i_rel: millimolar_per_second {pub: in};
    var i_NaCa_cyt: nanoA {pub: in};
    var i_NaCa_ds: nanoA {pub: in};
    var i_Ca_L_Ca_cyt: nanoA {pub: in};
    var i_Ca_L_Ca_ds: nanoA {pub: in};
    var i_b_Ca: nanoA {pub: in};
    var F: coulomb_per_mole {pub: in};
    var time: second {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius)*length;
    V_i_ratio = 1{dimensionless}-V_e_ratio-V_up_ratio-V_rel_ratio;
    V_i = V_Cell*V_i_ratio;
    ode(Ca_i, time) = -1{mA_nA}/(2{dimensionless}*1{litre_micrometre3}*V_i*F)*(i_Ca_L_Ca_cyt+i_b_Ca-2{dimensionless}*i_NaCa_cyt-2{dimensionless}*i_NaCa_ds)+Ca_ds*V_ds_ratio*Kdecay+i_rel*V_rel_ratio/V_i_ratio-ode(Ca_Calmod, time)-ode(Ca_Trop, time)-i_up;
    ode(Ca_ds, time) = -1{mA_nA}*i_Ca_L_Ca_ds/(2{dimensionless}*1{litre_micrometre3}*V_ds_ratio*V_i*F)-Ca_ds*Kdecay;
    ode(Ca_up, time) = V_i_ratio/V_up_ratio*i_up-i_trans;
    ode(Ca_rel, time) = V_up_ratio/V_rel_ratio*i_trans-i_rel;
    ode(Ca_Calmod, time) = alpha_Calmod*Ca_i*(Calmod-Ca_Calmod)-beta_Calmod*Ca_Calmod;
    ode(Ca_Trop, time) = alpha_Trop*Ca_i*(Trop-Ca_Trop)-beta_Trop*Ca_Trop;
  enddef;

  def group as containment for
    comp membrane incl
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_d_gate;
        comp L_type_Ca_channel_f_gate;
        comp L_type_Ca_channel_f2_gate;
        comp L_type_Ca_channel_f2ds_gate;
      endcomp;
      comp rapid_delayed_rectifier_potassium_current incl
        comp rapid_delayed_rectifier_potassium_current_xr1_gate;
        comp rapid_delayed_rectifier_potassium_current_xr2_gate;
      endcomp;
      comp slow_delayed_rectifier_potassium_current incl
        comp slow_delayed_rectifier_potassium_current_xs_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp persistent_sodium_current;
      comp sodium_background_current;
      comp calcium_background_current;
      comp transient_outward_current incl
        comp transient_outward_current_s_gate;
        comp transient_outward_current_r_gate;
      endcomp;
      comp sodium_potassium_pump;
      comp sodium_calcium_exchanger;
      comp sarcoplasmic_reticulum_calcium_pump;
      comp calcium_translocation;
      comp calcium_release;
      comp extracellular_sodium_concentration;
      comp intracellular_sodium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
      comp extracellular_calcium_concentration;
      comp intracellular_calcium_concentration;
      comp reversal_potentials;
    endcomp;
  enddef;

  def group as encapsulation for
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_d_gate;
      comp L_type_Ca_channel_f_gate;
      comp L_type_Ca_channel_f2_gate;
      comp L_type_Ca_channel_f2ds_gate;
    endcomp;
    comp transient_outward_current incl
      comp transient_outward_current_s_gate;
      comp transient_outward_current_r_gate;
    endcomp;
    comp rapid_delayed_rectifier_potassium_current incl
      comp rapid_delayed_rectifier_potassium_current_xr1_gate;
      comp rapid_delayed_rectifier_potassium_current_xr2_gate;
    endcomp;
    comp slow_delayed_rectifier_potassium_current incl
      comp slow_delayed_rectifier_potassium_current_xs_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between reversal_potentials and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and environment for
    vars time and time;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between persistent_sodium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between transient_outward_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between sodium_calcium_exchanger and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and environment for
    vars time and time;
  enddef;
  def map between calcium_translocation and environment for
    vars time and time;
  enddef;
  def map between calcium_release and environment for
    vars time and time;
  enddef;
  def map between calcium_release and membrane for
    vars V and V;
  enddef;
  def map between membrane and reversal_potentials for
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and fast_sodium_current for
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
    vars i_Ca_L_Ca_cyt and i_Ca_L_Ca_cyt;
    vars i_Ca_L_Ca_ds and i_Ca_L_Ca_ds;
    vars i_Ca_L_Na_cyt and i_Ca_L_Na_cyt;
    vars i_Ca_L_Na_ds and i_Ca_L_Na_ds;
    vars i_Ca_L_K_cyt and i_Ca_L_K_cyt;
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and rapid_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between membrane and slow_delayed_rectifier_potassium_current for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between membrane and transient_outward_current for
    vars V and V;
    vars i_to and i_to;
  enddef;
  def map between membrane and time_independent_potassium_current for
    vars V and V;
    vars i_K1 and i_K1;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and persistent_sodium_current for
    vars V and V;
    vars i_p_Na and i_p_Na;
  enddef;
  def map between membrane and sodium_background_current for
    vars V and V;
    vars i_b_Na and i_b_Na;
  enddef;
  def map between membrane and calcium_background_current for
    vars V and V;
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars i_NaK and i_NaK;
  enddef;
  def map between membrane and sodium_calcium_exchanger for
    vars V and V;
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars i_NaCa_ds and i_NaCa_ds;
    vars R and R;
    vars T and T;
    vars F and F;
  enddef;
  def map between membrane and intracellular_sodium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_potassium_concentration for
    vars F and F;
  enddef;
  def map between membrane and intracellular_calcium_concentration for
    vars F and F;
  enddef;
  def map between reversal_potentials and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and persistent_sodium_current for
    vars E_Na and E_Na;
  enddef;
  def map between reversal_potentials and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and rapid_delayed_rectifier_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and slow_delayed_rectifier_potassium_current for
    vars E_Ks and E_Ks;
  enddef;
  def map between reversal_potentials and transient_outward_current for
    vars E_K and E_K;
  enddef;
  def map between reversal_potentials and calcium_background_current for
    vars E_Ca and E_Ca;
  enddef;
  def map between reversal_potentials and fast_sodium_current for
    vars E_mh and E_mh;
  enddef;
  def map between reversal_potentials and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between reversal_potentials and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between reversal_potentials and intracellular_potassium_concentration for
    vars K_i and K_i;
  enddef;
  def map between reversal_potentials and intracellular_sodium_concentration for
    vars Na_i and Na_i;
  enddef;
  def map between reversal_potentials and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between reversal_potentials and intracellular_calcium_concentration for
    vars Ca_i and Ca_i;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between time_independent_potassium_current and intracellular_potassium_concentration for
    vars i_K1 and i_K1;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and intracellular_potassium_concentration for
    vars i_Kr and i_Kr;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and intracellular_potassium_concentration for
    vars i_Ks and i_Ks;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_b_Na and i_b_Na;
    vars Na_i and Na_i;
  enddef;
  def map between persistent_sodium_current and intracellular_sodium_concentration for
    vars i_p_Na and i_p_Na;
  enddef;
  def map between L_type_Ca_channel and intracellular_sodium_concentration for
    vars i_Ca_L_Na_cyt and i_Ca_L_Na_cyt;
    vars i_Ca_L_Na_ds and i_Ca_L_Na_ds;
    vars Na_i and Na_i;
  enddef;
  def map between L_type_Ca_channel and intracellular_calcium_concentration for
    vars i_Ca_L_Ca_cyt and i_Ca_L_Ca_cyt;
    vars i_Ca_L_Ca_ds and i_Ca_L_Ca_ds;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between L_type_Ca_channel and intracellular_potassium_concentration for
    vars i_Ca_L_K_cyt and i_Ca_L_K_cyt;
    vars i_Ca_L_K_ds and i_Ca_L_K_ds;
    vars K_i and K_i;
  enddef;
  def map between L_type_Ca_channel and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between L_type_Ca_channel and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_b_Ca and i_b_Ca;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_NaK and i_NaK;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars K_o and K_o;
  enddef;
  def map between sodium_potassium_pump and intracellular_potassium_concentration for
    vars i_NaK and i_NaK;
  enddef;
  def map between transient_outward_current and intracellular_potassium_concentration for
    vars i_to and i_to;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_calcium_concentration for
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars i_NaCa_ds and i_NaCa_ds;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between sodium_calcium_exchanger and intracellular_sodium_concentration for
    vars i_NaCa_cyt and i_NaCa_cyt;
    vars Na_i and Na_i;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_sodium_concentration for
    vars Na_o and Na_o;
  enddef;
  def map between sodium_calcium_exchanger and extracellular_calcium_concentration for
    vars Ca_o and Ca_o;
  enddef;
  def map between sarcoplasmic_reticulum_calcium_pump and intracellular_calcium_concentration for
    vars i_up and i_up;
    vars Ca_i and Ca_i;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_translocation and intracellular_calcium_concentration for
    vars i_trans and i_trans;
    vars Ca_rel and Ca_rel;
    vars Ca_up and Ca_up;
  enddef;
  def map between calcium_release and intracellular_calcium_concentration for
    vars i_rel and i_rel;
    vars Ca_rel and Ca_rel;
    vars Ca_i and Ca_i;
    vars Ca_ds and Ca_ds;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr1_gate for
    vars xr1 and xr1;
    vars time and time;
    vars V and V;
  enddef;
  def map between rapid_delayed_rectifier_potassium_current and rapid_delayed_rectifier_potassium_current_xr2_gate for
    vars xr2 and xr2;
    vars time and time;
    vars V and V;
  enddef;
  def map between slow_delayed_rectifier_potassium_current and slow_delayed_rectifier_potassium_current_xs_gate for
    vars xs and xs;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
    vars Ca_i and Ca_i;
    vars Km_f2 and Km_f2;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f2ds_gate for
    vars f2ds and f2ds;
    vars time and time;
    vars V and V;
    vars Ca_ds and Ca_ds;
    vars Km_f2ds and Km_f2ds;
    vars R_decay and R_decay;
  enddef;
  def map between transient_outward_current and transient_outward_current_s_gate for
    vars s and s;
    vars time and time;
    vars V and V;
  enddef;
  def map between transient_outward_current and transient_outward_current_r_gate for
    vars r and r;
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
  def map between intracellular_potassium_concentration and intracellular_calcium_concentration for
    vars V_i and V_i;
  enddef;
enddef;
